CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:21
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|
    Name of the file:
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDAPI
    Name the output image:DAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:OrigTubulin
    Name the output image:Tubulin
    Select the illumination function:IllumTubulin
    Select how the illumination function is applied:Divide
    Select the input image:OrigActin
    Name the output image:Actin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,115
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:4|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Name the outline image:CellOutline
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:5|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:Actin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:Tubulin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:3
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:14|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
MeasureTexture:[module_num:16|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclei
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:17|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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:Actin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:18|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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:Actin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:19|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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:Tubulin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

MeasureTexture:[module_num:20|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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:Tubulin
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

CreateBatchFiles:[module_num:21|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
