CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20171031144938
GitHash:478e2fe17
ModuleCount:8
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|
    Name of the file:
    Load images based on this data?:Yes
    Base image location:Default Input Folder|.
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:OrigDAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:OrigActin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:4|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
    Select the input image:OrigTubulin
    Name the output image:IllumTubulin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:5|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
    Select the type of image to save:Image
    Select the image to save:IllumActin
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumActin
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    Saved file format:mat
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:IllumDAPI
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumDAPI
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    Saved file format:mat
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:IllumTubulin
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumTubulin
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    Saved file format:mat
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:8|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
