CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:16
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|
    Name of the file:
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDAPI
    Name the output image:DAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:OrigTubulin
    Name the output image:Tubulin
    Select the illumination function:IllumTubulin
    Select how the illumination function is applied:Divide
    Select the input image:OrigActin
    Name the output image:Actin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:logDAPI
    Image or measurement?:Image
    Select the first image:DAPI
    Multiply the first image by:48.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:logActin
    Image or measurement?:Image
    Select the first image:Actin
    Multiply the first image by:48.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,115
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Name the outline image:CellOutline
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Cells
    Name the output image:CellLabel
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabel
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cytoplasm
    Name the output image:CytoplasmLabel
    Select the color format:Grayscale
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:logDAPI
    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:logActin
    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabel
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--nuclei_label
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|label
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CellLabel
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--cell_label
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|label
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:CytoplasmLabel
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--cytoplasm_label
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|label
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:18|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
