CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<UserStem>.*)_(?P<Well>[a-pA-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<Date>[\\\\d-]*)[\\\\\\\\/](?P<Plate>[0-9]{5})$
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>[0-9]{5})_Illum.*
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does endwith ".mat")
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    Metadata extraction method:Import from file
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata file location:
    Match file and image metadata:[{'Image Metadata': u'Plate', 'CSV Metadata': u'CPD_PLATE_MAP_NAME'}, {'Image Metadata': u'Well', 'CSV Metadata': u'CPD_WELL_POSITION'}]
    Use case insensitive matching?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigPhGolgi': u'Plate', u'IllumPhGolgi': u'Plate', u'OrigERSytoBleed': u'Plate', u'IllumHoechst': u'Plate', u'IllumERSyto': u'Plate', u'OrigERSyto': u'Plate', u'IllumERSytoBleed': u'Plate', u'OrigHoechst': u'Plate', u'OrigMito': u'Plate', u'IllumMito': u'Plate'}, {u'OrigPhGolgi': u'Well', u'IllumPhGolgi': None, u'OrigERSytoBleed': u'Well', u'IllumHoechst': None, u'IllumERSyto': None, u'OrigERSyto': u'Well', u'IllumERSytoBleed': None, u'OrigHoechst': u'Well', u'OrigMito': u'Well', u'IllumMito': None}, {u'OrigPhGolgi': u'Site', u'IllumPhGolgi': None, u'OrigERSyto': u'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigERSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigERSytoBleed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigPhGolgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "IllumHoechst.mat")
    Name to assign these images:IllumHoechst
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumERSyto.mat")
    Name to assign these images:IllumERSyto
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumERSytoBleed.mat")
    Name to assign these images:IllumERSytoBleed
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumPhGolgi.mat")
    Name to assign these images:IllumPhGolgi
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does endwith "IllumMito.mat")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigHoechst
    Name the output image:Hoechst
    Select the illumination function:IllumHoechst
    Select how the illumination function is applied:Divide
    Select the input image:OrigERSyto
    Name the output image:ERSyto
    Select the illumination function:IllumERSyto
    Select how the illumination function is applied:Divide
    Select the input image:OrigPhGolgi
    Name the output image:PhGolgi
    Select the illumination function:IllumPhGolgi
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigERSytoBleed
    Name the output image:ERSytoBleed
    Select the illumination function:IllumERSytoBleed
    Select how the illumination function is applied:Divide

MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:7|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigHoechst
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigERSytoBleed
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:8|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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Output Folder sub-folder|../QC
    Rules file name:isSaturatedRules.txt
    Class number:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    Flag if any, or all, measurement(s) fails to meet the criteria?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Output Folder sub-folder|../QC
    Rules file name:isBlurryRules.txt
    Class number:2

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0125,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:ERSytoBleed
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.02,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureCorrelation:[module_num:12|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
    Hidden:5
    Hidden:3
    Select an image to measure:Hoechst
    Select an image to measure:Mito
    Select an image to measure:ERSyto
    Select an image to measure:ERSytoBleed
    Select an image to measure:PhGolgi
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm

MeasureGranularity:[module_num:13|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
    Image count:5
    Object count:1
    Select an image to measure:Hoechst
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:ERSyto
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:PhGolgi
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:ERSytoBleed
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:14|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
    Hidden:5
    Select an image to measure:Hoechst
    Select an image to measure:ERSyto
    Select an image to measure:ERSytoBleed
    Select an image to measure:PhGolgi
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectRadialDistribution:[module_num:18|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
    Hidden:4
    Hidden:3
    Hidden:1
    Select an image to measure:ERSyto
    Select an image to measure:ERSytoBleed
    Select an image to measure:PhGolgi
    Select an image to measure:Mito
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:20|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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:Hoechst
    Select an image to measure:ERSyto
    Select an image to measure:ERSytoBleed
    Select an image to measure:PhGolgi
    Select an image to measure:Mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Texture scale to measure:5
    Angles to measure:Horizontal
    Texture scale to measure:10
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>_NucleiOutlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines/\\\\g<Plate>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>_CellOutlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Outlines/\\\\g<Plate>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:25|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
    Database type:MySQL
    Database name:
    Add a prefix to table names?:Yes
    Table prefix:analysis_
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    Output file location:Default Output Folder|Analysis
    Create a CellProfiler Analyst properties file?:Yes
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:CellOutlines,NucleiOutlines,OrigERSyto,OrigERSytoBleed,OrigHoechst,OrigMito,OrigPhGolgi
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:7
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:analysis
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CPA images via URL?:Yes
    Select an image to include:OrigHoechst
    Use the image name for the display?:No
    Image name:Hoechst
    Channel color:red
    Select an image to include:OrigERSyto
    Use the image name for the display?:No
    Image name:ER_Syto
    Channel color:green
    Select an image to include:OrigERSytoBleed
    Use the image name for the display?:No
    Image name:ER_Syto_Bleedthrough
    Channel color:blue
    Select an image to include:OrigPhGolgi
    Use the image name for the display?:No
    Image name:Phaloidin_Golgi
    Channel color:yellow
    Select an image to include:OrigMito
    Use the image name for the display?:No
    Image name:Mito
    Channel color:magenta
    Select an image to include:NucleiOutlines
    Use the image name for the display?:No
    Image name:Nuclei
    Channel color:none
    Select an image to include:CellOutlines
    Use the image name for the display?:No
    Image name:Cells
    Channel color:none
    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:26|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:\\\\\\\\iodine\\\\cbnt_cbimageX
    Cluster root path:/cbnt/cbimageX
    Local root path:\\\\\\\\iodine\\\\imaging_analysis
    Cluster root path:/imaging/analysis
