CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "thumb")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<UserStem>.*)_(?P<Well>[a-pA-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<Date>[\\\\d-]*)[\\\\\\\\/](?P<Plate>[0-9]{5})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigPhGolgi': u'Plate', u'OrigERSyto': u'Plate', u'OrigERSytoBleed': u'Plate', u'OrigHoechst': u'Plate', u'OrigMito': u'Plate'}, {u'OrigPhGolgi': u'Well', u'OrigERSyto': u'Well', u'OrigERSytoBleed': u'Well', u'OrigHoechst': u'Well', u'OrigMito': u'Well'}, {u'OrigPhGolgi': u'Site', u'OrigERSyto': u'Site', u'OrigERSytoBleed': u'Site', u'OrigHoechst': u'Site', u'OrigMito': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigERSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigERSytoBleed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigPhGolgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigHoechst
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigERSytoBleed
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

ExportToDatabase:[module_num:7|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
    Database type:MySQL
    Database name:
    Add a prefix to table names?:Yes
    Table prefix:qc
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    Output file location:Default Output Folder|/imaging/analysis/2011_07_13_TargetAccelerator_CancerProgram_MPG/2013_10_11_SIGMA2_Pilot/Output/QC
    Create a CellProfiler Analyst properties file?:Yes
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:None
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:OrigERSyto,OrigERSytoBleed,OrigHoechst,OrigMito,OrigPhGolgi
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:5
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:12
    Experiment name:qc
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CPA images via URL?:Yes
    Select an image to include:OrigHoechst
    Use the image name for the display?:No
    Image name:Hoechst
    Channel color:red
    Select an image to include:OrigERSyto
    Use the image name for the display?:No
    Image name:ER_Syto
    Channel color:green
    Select an image to include:OrigERSytoBleed
    Use the image name for the display?:No
    Image name:ER_Syto_Bleedthrough
    Channel color:blue
    Select an image to include:OrigPhGolgi
    Use the image name for the display?:No
    Image name:Phalloidin_Golgi
    Channel color:yellow
    Select an image to include:OrigMito
    Use the image name for the display?:No
    Image name:Mito
    Channel color:magenta
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
    Enter the object name:Image
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
    Enter the object name:Image
    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigHoechst
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigERSyto
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigERSytoBleed
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigPhGolgi
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigMito
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigHoechst
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigERSyto
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigERSytoBleed
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigPhGolgi
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigMito
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:Histogram
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_ThresholdOtsu_OrigHoechst_2W
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis index:ImageNumber
    Select the measurement display tool:Histogram
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_ThresholdOtsu_OrigERSytoBleed_3FW
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis index:ImageNumber

CreateBatchFiles:[module_num:8|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:\\\\\\\\iodine\\\\imaging_analysis
    Cluster root path:/imaging/analysis
    Local root path:\\\\\\\\iodine\\\\cbnt_cbimageX
    Cluster root path:/cbnt/cbimageX
