CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop\load_data_csv\2019_10_10_Batch2\Experiment14_Cellpainting_1072019
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigER
    Name the output image:PreActin488
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:Pretubulin568
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:PreDAPI
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:PreMito647
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DAPI
    Image or measurement?:Image
    Select the first image:PreDAPI
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Actin488
    Image or measurement?:Image
    Select the first image:PreActin488
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Mito647
    Image or measurement?:Image
    Select the first image:PreMito647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Tubulin568
    Image or measurement?:Image
    Select the first image:Pretubulin568
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:Actin488
    Name the output image:EnhancedActin
    Select the operation:Enhance
    Feature size:40
    Feature type:Neurites
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    Smoothing scale:4
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    Enhancement method:Tubeness
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
Threshold:[module_num:8|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
    Select the input image:EnhancedActin
    Name the output image:ThreshActin
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:ThreshActin
    Name the primary objects to be identified:ActinObj
    Typical diameter of objects, in pixel units (Min,Max):5,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.02
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.34
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Smooth:[module_num:11|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
    Select the input image:Tubulin568
    Name the output image:CellMask
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:12
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CellMask
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

Threshold:[module_num:14|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
    Select the input image:EnhancedActin
    Name the output image:BinaryActin
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MorphologicalSkeleton:[module_num:15|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
    Select the input image:ThreshActin
    Name the output image:MorphSkeletonActin

MeasureObjectIntensity:[module_num:16|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
    Hidden:1
    Select an image to measure:Actin488
    Select objects to measure:ActinObj

MeasureObjectSkeleton:[module_num:17|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
    Select the seed objects:Nuclei
    Select the skeletonized image:MorphSkeletonActin
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:ActinObj
    Calculate the Zernike features?:Yes

MeasureColocalization:[module_num:19|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
    Hidden:4
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:Mito647
    Select an image to measure:Tubulin568
    Select an image to measure:Actin488
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:20|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
    Image count:4
    Object count:1
    Select an image to measure:DAPI
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Mito647
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:Actin488
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:Tubulin568
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:21|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
    Hidden:4
    Select an image to measure:DAPI
    Select an image to measure:Tubulin568
    Select an image to measure:Mito647
    Select an image to measure:Actin488
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:22|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:24|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:25|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
    Hidden:4
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DAPI
    Select an image to measure:Actin488
    Select an image to measure:Tubulin568
    Select an image to measure:Mito647
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:27|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
    Hidden:4
    Hidden:3
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:Tubulin568
    Select an image to measure:Mito647
    Select an image to measure:Actin488
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20
    Measure images or objects?:Both

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Actin488
    Name the output image:ObjectOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cells
    Select outline color:Green
    Select objects to display:ActinObj
    Select outline color:Blue
    Select objects to display:Nuclei

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:34|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\Users\Administrator\Desktop
    Cluster root path:/home/ubuntu/bucket/projects/2019_06_04_Cardiomyocytes_AnantChopra_Bayer
