CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:59
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop\load_data_csv\2021_11_19_Batch11\BR00124353
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

FlagImage:[module_num:2|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBad
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.5
    Flag images based on high values?:Yes
    Maximum value:2.5
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    Ignore flag skips on last cycle?:No

CorrectIlluminationApply:[module_num:3|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigBODIPY
    Name the output image:BODIPY
    Select the illumination function:IllumBODIPY
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:4|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
    Select the input image:DNA
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:70
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:UnfilteredNuclei
    Typical diameter of objects, in pixel units (Min,Max):35,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.015,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:AGP
    Name the output image:BackgroundAGP
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:AGP
    Name the output image:CorrAGP
    Select the illumination function:BackgroundAGP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

ImageMath:[module_num:8|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:AGPPlusBodipy
    Image or measurement?:Image
    Select the first image:CorrAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BODIPY
    Multiply the second image by:0.1
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
ImageMath:[module_num:9|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MitoPlusBodipy
    Image or measurement?:Image
    Select the first image:Mito
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BODIPY
    Multiply the second image by:0.3
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
ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MitoPlusBodipyPlusAGP
    Image or measurement?:Image
    Select the first image:Mito
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BODIPY
    Multiply the second image by:0.3
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    Image or measurement?:Image
    Select the third image:AGP
    Multiply the third image by:1.0
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:UnfilteredNuclei
    Name the objects to be identified:UnfilteredCells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:MitoPlusBodipy
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.01,0.02
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:UnfilteredCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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
    Select the objects to filter:UnfilteredCells
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3000
    Filter using a maximum measurement value?:Yes
    Maximum value:70000
    Select additional object to relabel:UnfilteredNuclei
    Name the relabeled objects:Nuclei

ExpandOrShrinkObjects:[module_num:14|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:ExpandedNuclei
    Name the tertiary objects to be identified:CytoplasmExpandedNuclei
    Shrink smaller object prior to subtraction?:Yes

CorrectIlluminationCalculate:[module_num:17|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
    Select the input image:BODIPY
    Name the output image:BODIPYBackground
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:18|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
    Select the input image:BODIPY
    Name the output image:CorrBODIPY
    Select the illumination function:BODIPYBackground
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:19|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
    Select the input image:CorrBODIPY
    Name the output image:EnhancedSmallBODIPY
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:20|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
    Select the input image:CorrBODIPY
    Name the output image:EnhancedLargeBODIPY
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:21|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notes:['used to be CorrBODIPY']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
    Select the input image:EnhancedLargeBODIPY
    Name the output image:MaskedLargeBODIPY
    Use objects or an image as a mask?:Objects
    Select object for mask:CytoplasmExpandedNuclei
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    Invert the mask?:No

MaskImage:[module_num:22|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
    Select the input image:EnhancedSmallBODIPY
    Name the output image:MaskedEnhancedSmallBODIPY
    Use objects or an image as a mask?:Objects
    Select object for mask:CytoplasmExpandedNuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:23|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notes:['identify all, then remove large ones and enhance result to identify small ones.']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
    Select the input image:MaskedLargeBODIPY
    Name the primary objects to be identified:ALLBODIPYObjects
    Typical diameter of objects, in pixel units (Min,Max):2,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.001,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:240
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:ALLBODIPYObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:25|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
    Select the objects to filter:ALLBODIPYObjects
    Name the output objects:LargeBODIPYObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:.85
    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:.8
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:26|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
    Select the input image:MaskedEnhancedSmallBODIPY
    Name the output image:MaskedEnhancedSmallBODIPY2
    Use objects or an image as a mask?:Objects
    Select object for mask:LargeBODIPYObjects
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:27|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
    Select the input image:MaskedEnhancedSmallBODIPY2
    Name the primary objects to be identified:SmallBODIPYObjects
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.001,1.0
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    Log transform before thresholding?:No
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
MeasureColocalization:[module_num:28|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
    Select images to measure:AGP, BODIPY, DNA, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, Cells, LargeBODIPYObjects, Cytoplasm, SmallBODIPYObjects
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:29|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
    Select images to measure:AGP, BODIPY, DNA, Mito
    Measure within objects?:Yes
    Select objects to measure:Nuclei, Cells, LargeBODIPYObjects, Cytoplasm, SmallBODIPYObjects
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:30|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
    Select images to measure:AGP, BODIPY, DNA, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectIntensity:[module_num:31|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
    Select images to measure:AGP, BODIPY
    Select objects to measure:SmallBODIPYObjects, LargeBODIPYObjects

MeasureObjectNeighbors:[module_num:32|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:33|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:34|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:35|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
    Select images to measure:AGP, BODIPY, DNA, Mito
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:36|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:37|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
    Select object sets to measure:LargeBODIPYObjects, SmallBODIPYObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:38|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells, LargeBODIPYObjects, Nuclei, SmallBODIPYObjects

MeasureTexture:[module_num:39|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
    Select images to measure:AGP, BODIPY, DNA, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

RelateObjects:[module_num:40|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
    Parent objects:Cells
    Child objects:LargeBODIPYObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:LargeBODIPYRelate
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
RelateObjects:[module_num:41|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
    Parent objects:Cells
    Child objects:SmallBODIPYObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SmallBODIPYRelate
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
OverlayOutlines:[module_num:42|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
    Display outlines on a blank image?:Yes
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    Name the output image:outline_nuclei_alone
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max possible
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:43|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
    Display outlines on a blank image?:Yes
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    Name the output image:outline_cells_alone
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

OverlayOutlines:[module_num:44|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
    Display outlines on a blank image?:Yes
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    Name the output image:outline_BODIPY_alone
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:SmallBODIPYRelate
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    Select objects to display:LargeBODIPYRelate

ImageMath:[module_num:45|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
    Operation:None
    Raise the power of the result by:0.4
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:mito_enhance
    Image or measurement?:Image
    Select the first image:Mito
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:46|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:agp_enhance
    Image or measurement?:Image
    Select the first image:CorrAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:47|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:bodipy_enhance
    Image or measurement?:Image
    Select the first image:CorrBODIPY
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:48|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:dna_enhance
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:49|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:bodipy_enhance
    Name the output image:Outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:magenta
    Select objects to display:FilteredNuclei
    Select outline color:Green
    Select objects to display:FilteredCells
    Select outline color:yellow
    Select objects to display:SmallBODIPYRelate
    Select outline color:#FF8000
    Select objects to display:LargeBODIPYRelate

SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:outline_BODIPY_alone
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>--bodipy_outlines
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    Saved file format:png
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:outline_cells_alone
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>--cells_outlines
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    Saved file format:png
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:outline_nuclei_alone
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:bodipy_enhance
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>--BODIPY
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    Saved file format:png
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:agp_enhance
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>--AGP
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    Saved file format:png
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:55|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:mito_enhance
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>--MITO
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    Saved file format:png
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:56|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:dna_enhance
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>--DNA
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    Saved file format:png
    Output file location:Default Output Folder|\g<Plate>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToDatabase:[module_num:57|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:analysis_2016_20160623_a549_48hr_
    Output file location:Default Output Folder|Analysis
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:CellOutlines,NucleiOutlines,OrigER,OrigRNA,OrigDNA,OrigMito,OrigAGP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
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    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:7
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:analysis_2016_20160621_a549_48hr
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:Yes
    Select the classification type:Object
    Select an image to include:OrigDNA
    Use the image name for the display?:No
    Image name:DNA
    Channel color:red
    Select an image to include:OrigER
    Use the image name for the display?:No
    Image name:ER
    Channel color:green
    Select an image to include:OrigRNA
    Use the image name for the display?:No
    Image name:RNA
    Channel color:blue
    Select an image to include:OrigAGP
    Use the image name for the display?:No
    Image name:AGP
    Channel color:yellow
    Select an image to include:OrigMito
    Use the image name for the display?:No
    Image name:Mito
    Channel color:magenta
    Select an image to include:NucleiOutlines
    Use the image name for the display?:No
    Image name:Nuclei
    Channel color:none
    Select an image to include:CellOutlines
    Use the image name for the display?:No
    Image name:Cells
    Channel color:none
    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:58|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

CreateBatchFiles:[module_num:59|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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