CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:47
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop\load_data_csv\2019_10_16_Batch3\Experiment1V2F_100819
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigAGP
    Name the output image:Pre568
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:PreDAPI
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:PreMito647
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DAPI
    Image or measurement?:Image
    Select the first image:PreDAPI
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Img568
    Image or measurement?:Image
    Select the first image:Pre568
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImgMito647
    Image or measurement?:Image
    Select the first image:PreMito647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:Img568
    Name the output image:EnhancedImg568
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:ImgMito647
    Name the output image:EnhancedImg647
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EnhancedImg568
    Name the primary objects to be identified:Af568Stripes
    Typical diameter of objects, in pixel units (Min,Max):2,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
    Suppress local maxima that are closer than this minimum allowed distance:6
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:EnhancedImg647
    Name the primary objects to be identified:Af647Stripes
    Typical diameter of objects, in pixel units (Min,Max):2,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
    Suppress local maxima that are closer than this minimum allowed distance:6
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:10|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notes:['Find nuclei, cells are multinuclear so for now let’s not try to segment touching nuclei. Also don’t trhow out anything on the edges.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.35
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:DAPI
    Name the primary objects to be identified:NucleiSegmented
    Typical diameter of objects, in pixel units (Min,Max):40,100000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.35
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:NucleiSegmented
    Calculate the Zernike features?:No

MeasureImageIntensity:[module_num:13|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notes:['Find intensity values for both stain channels']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
    Select the image to measure:Img568
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:ImgMito647
    Measure the intensity only from areas enclosed by objects?:No
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
CalculateMath:[module_num:14|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notes:['Determine the ratio of intensity in the stain channels. Using quartiles so that one hot pixel doesn’t knock everything over.']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
    Name the output measurement:RatioInt
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_UpperQuartileIntensity_Img568
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_UpperQuartileIntensity_ImgMito647
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ImageMath:[module_num:15|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notes:['Correct the 647 channel to match the intensity scale of the 568 channel.']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Corrected647
    Image or measurement?:Image
    Select the first image:OrigMito
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:Alexa647
    Multiply the second image by:1.0
    Measurement:Math_RatioInt

ImageMath:[module_num:16|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notes:['Merge the two stain channels together into a single greyscale image.']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
    Operation:Maximum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GreyMerge
    Image or measurement?:Image
    Select the first image:Corrected647
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OrigAGP
    Multiply the second image by:1.0
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
Smooth:[module_num:17|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notes:['Apply smoothing to the combined stain image, in order to create a mimic of a cell mask by eliminating the banded staining pattern.']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
    Select the input image:GreyMerge
    Name the output image:FalseCellMask
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16
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
IdentifySecondaryObjects:[module_num:18|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notes:['Attempt to identify cell boundaries using nuclei as seeds and the faux cell mask to watershed into.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:FalseCellMask
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Smooth:[module_num:19|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notes:['Smooth the grey image again, but by a smaller factor, so as to create single lines for the tubules without merging them all together.']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
    Select the input image:GreyMerge
    Name the output image:TubeSmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ImageMath:[module_num:20|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notes:['Multiply the smoothed tubules in order to boost signal on weaker objects.']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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:TubeEnhance
    Image or measurement?:Image
    Select the first image:TubeSmooth
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:21|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notes:['Detect and enhance well-defined tubules']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
    Select the input image:TubeEnhance
    Name the output image:EnhanceTubes
    Select the operation:Enhance
    Feature size:20
    Feature type:Neurites
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    Smoothing scale:4
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    Enhancement method:Tubeness
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
IdentifyPrimaryObjects:[module_num:22|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notes:['Use enhanced tubule image to detect tubules as objects']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
    Select the input image:EnhanceTubes
    Name the primary objects to be identified:Tubes
    Typical diameter of objects, in pixel units (Min,Max):10,900
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:23|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notes:['Generate a binary mask from the enhanced tubule object.']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
    Select the input image:EnhanceTubes
    Name the output image:TubeBinary
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MorphologicalSkeleton:[module_num:24|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notes:['Use binary mask to generate a skeleton, which forms an approximate map of the tubules.']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
    Select the input image:TubeBinary
    Name the output image:MorphologicalSkeleton

MeasureObjectIntensity:[module_num:25|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notes:['Calculate nuclear stats']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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclei
    Select objects to measure:NucleiSegmented

MeasureObjectIntensity:[module_num:26|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notes:['Analyse each stain, plus both stains together, within both entire cells and the tubules themselves.']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
    Hidden:3
    Select an image to measure:OrigAGP
    Select an image to measure:OrigMito
    Select an image to measure:GreyMerge
    Select objects to measure:Cells
    Select objects to measure:Tubes

MeasureObjectSizeShape:[module_num:27|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notes:['Measure nuclear and cellular size and shape']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
    Select objects to measure:Nuclei
    Select objects to measure:NucleiSegmented
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectSizeShape:[module_num:28|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notes:['Measure tubule size and shape, alongside Zernike features']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
    Select objects to measure:Tubes
    Calculate the Zernike features?:Yes

MeasureObjectSkeleton:[module_num:29|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notes:['Attempt to measure skeleton, seeding from nuclei. Probably won’t work']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
    Select the seed objects:Nuclei
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureTexture:[module_num:30|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notes:['Measure texture of each stain within cells and tubules']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
    Hidden:3
    Hidden:2
    Hidden:2
    Select an image to measure:OrigAGP
    Select an image to measure:OrigMito
    Select an image to measure:GreyMerge
    Select objects to measure:Cells
    Select objects to measure:Tubes
    Texture scale to measure:8
    Texture scale to measure:20
    Measure images or objects?:Objects

MeasureTexture:[module_num:31|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notes:['Measure texture within tubules, combining both stains at a smaller scale.']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
    Hidden:3
    Hidden:1
    Hidden:1
    Select an image to measure:OrigAGP
    Select an image to measure:OrigMito
    Select an image to measure:GreyMerge
    Select objects to measure:Tubes
    Texture scale to measure:4
    Measure images or objects?:Objects

MeasureGranularity:[module_num:32|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notes:['Measure granularity within cells and tubes']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
    Image count:2
    Object count:2
    Select an image to measure:OrigAGP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:5
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Tubes
    Object count:2
    Select an image to measure:OrigMito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:5
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Tubes

MeasureImageAreaOccupied:[module_num:33|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notes:['Get area covered by cells vs tubules']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
    Hidden:4
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Tubes
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Af568Stripes
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Af647Stripes
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
RelateObjects:[module_num:34|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
    Parent objects:Cells
    Child objects:NucleiSegmented
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SingleNucleiinCells
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
RelateObjects:[module_num:35|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notes:['Associate tubules to individual cells']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
    Parent objects:Cells
    Child objects:Tubes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TubesinCells
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
RelateObjects:[module_num:36|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
    Parent objects:Cells
    Child objects:Af568Stripes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Af568StripesInCells
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
RelateObjects:[module_num:37|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
    Parent objects:Cells
    Child objects:Af647Stripes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Af647StripesInCells
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
GrayToColor:[module_num:38|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notes:['Generate preview image']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enabled:False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
    Select a color scheme:Composite
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    Name the output image:Preview
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    Hidden:3
    Image name:ImgMito647
    Color:#D3A8FF
    Weight:1.0
    Image name:Img568
    Color:#FF8040
    Weight:1.0
    Image name:DAPI
    Color:#C1C1C1
    Weight:1.0

RescaleIntensity:[module_num:39|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notes:['Enhance brightness of preview']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enabled:False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
    Select the input image:Preview
    Name the output image:PreviewScaled
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0,0.4
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
OverlayOutlines:[module_num:40|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notes:['Overlay nuclear and cellular detection outlines on preview']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PreviewScaled
    Name the output image:PreviewOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFF90F
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:Cells

OverlayOutlines:[module_num:41|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notes:['Overlay nuclear and tubule detection outlines on preview']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PreviewScaled
    Name the output image:PreviewOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF8000
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:Tubes

OverlayOutlines:[module_num:42|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PreviewScaled
    Name the output image:PreviewOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF8040
    Select objects to display:Cells
    Select outline color:white
    Select objects to display:SingleNucleiinCells

SaveImages:[module_num:43|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notes:['Save preview images if needed']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:PreviewOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Cardiac2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:46|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:47|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Volumes/Untitled/Experiment4_plate3_longterm_allwells__2019-06-25T17_51_26-Measurement1/
    Cluster root path:/home/ubuntu/bucket/projects/2019_06_04_Cardiomyocytes_AnantChopra_Bayer/2019_09_30_Batch1/images/Experiment4_plate3_longterm_allwells__2019-06-25T17_51_26-Measurement1/
