CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop\\load_data_csv\\2022_09_07_Batch8\\cmQTL_CRISPRi_plate1
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

FlagImage:[module_num:2|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.9
    Flag images based on high values?:Yes
    Maximum value:2.1
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    Ignore flag skips on last cycle?:No

CorrectIlluminationApply:[module_num:3|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:Brightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:4|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:120
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:6|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enabled:False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
    Select the input image:DNA
    Name the output image:FilteredDNA
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:12
    Suppress local maxima that are closer than this minimum allowed distance:16
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:80
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:RNA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.015,0.2
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    Log transform before thresholding?:Yes
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:10|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
    Select the input image:DNA
    Name the output image:RescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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
    Select the input image:RNA
    Name the output image:RescaleRNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:12|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
    Select the input image:AGP
    Name the output image:RescaleAGP
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:13|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:RescaleAGP
    Select the image to be colored green:RescaleRNA
    Select the image to be colored blue:RescaleDNA
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ImageMath:[module_num:14|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ColorImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:15|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>\g<Well>
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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