CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:23
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER_RNA
    Name the output image:ER_RNA
    Select the illumination function:IllumER_RNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide

MeasureImageQuality:[module_num:3|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:4|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigAGP
    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:5|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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isEmpty
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Rules
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    Rules file location:Default Input Folder|Desktop/SQLITE
    Rules file name:rules.txt
    Class number:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder|Desktop
    Rules file name:rules.txt
    Class number:2

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:12
    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Custom
    Size of adaptive window:40
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
Smooth:[module_num:7|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
    Select the input image:AGP
    Name the output image:smooth_AGP
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5.0
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:smooth_AGP
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    Regularization factor:0.001
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureCorrelation:[module_num:10|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
    Hidden:4
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:ER_RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cytoplasm
    Select an object to measure:Cells

MeasureGranularity:[module_num:11|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
    Image count:4
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:2
    Select an image to measure:ER_RNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:2
    Select an image to measure:AGP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:2
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:12|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
    Hidden:4
    Select an image to measure:DNA
    Select an image to measure:ER_RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:16|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
    Hidden:4
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DNA
    Select an image to measure:ER_RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureTexture:[module_num:18|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
    Hidden:4
    Hidden:3
    Hidden:1
    Select an image to measure:DNA
    Select an image to measure:ER_RNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Both

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigDNA
    Name the output image:NucleiOutlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigAGP
    Name the output image:CellOutlines
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#24EF2F
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_f\\\\g<Site>_nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Nuclei_Outlines
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_f\\\\g<Site>_cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Cell_outlines
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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  CreateBatchFiles:[module_num:24|svn_version:'Unknown'|variable_revision_number:7|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Store batch files in default output folder?:Yes
    Output folder path:/Users/habbasi/Documents/CellProfiler Output
    Are the cluster computers running Windows?:No
    Hidden: in batch mode:No
    Hidden: in distributed mode:No
    Hidden: default input folder at time of save:/Users/habbasi
    Hidden: revision number:0
    Hidden: from old matlab:No
    Launch BatchProfiler:No
