CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop\load_data_csv\2022_03_03_NCP_NEURONS_2_20x\BR00132672
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

FlagImage:[module_num:2|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Metadata_Site
    Flag images based on low values?:Yes
    Minimum value:1.9
    Flag images based on high values?:Yes
    Maximum value:2.1
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:OrigDNA
    Name the output image:PreDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:PreER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:PreAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:PreMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:PreRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:PreBrightfield
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide

ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNA
    Image or measurement?:Image
    Select the first image:PreDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ER
    Image or measurement?:Image
    Select the first image:PreER
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:AGP
    Image or measurement?:Image
    Select the first image:PreAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Mito
    Image or measurement?:Image
    Select the first image:PreMito
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:RNA
    Image or measurement?:Image
    Select the first image:PreRNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:9|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Brightfield
    Image or measurement?:Image
    Select the first image:PreBrightfield
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:DNA
    Name the output image:FilteredDNA
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:11|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notes:['', '1.2: 0.03']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
    Select the input image:FilteredDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:12
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.348
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1
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
ImageMath:[module_num:12|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
    Operation:None
    Raise the power of the result by:0.3
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:AGPExponent
    Image or measurement?:Image
    Select the first image:AGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:13|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
    Select the image to measure:AGPExponent
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:AGPBackSub
    Image or measurement?:Image
    Select the first image:AGPExponent
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_AGPExponent

IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:AGPBackSub
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    Regularization factor:0.00005
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.05,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ImageMath:[module_num:17|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
    Operation:None
    Raise the power of the result by:0.3
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:AGPRescaledForVis
    Image or measurement?:Image
    Select the first image:AGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:18|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
    Operation:None
    Raise the power of the result by:0.2
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNARescaledForVis
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:19|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
    Select the input image:AGPRescaledForVis
    Name the output image:RescaledAGP
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:20|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
    Select the input image:DNARescaledForVis
    Name the output image:RescaledDNA
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:21|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
    Select a color scheme:RGB
    Select the image to be colored red:RescaledDNA
    Select the image to be colored green:RescaledAGP
    Select the image to be colored blue:RescaledDNA
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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