CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:16
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|
    Name of the file:
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:logDNA
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:48.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:logRNA
    Image or measurement?:Image
    Select the first image:RNA
    Multiply the first image by:48.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:RNA
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    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Cells
    Name the output image:CellLabel
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:NucleiLabel
    Select the color format:Grayscale
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:logDNA
    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:logRNA
    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:NucleiLabel
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--nuclei_label
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|label
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:CellLabel
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--cell_label
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|label
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:16|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
