CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:17
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|
    Name of the file:
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

Resize:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DownsampledDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:DownsampledDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:4|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
    Select the input image:OrigER
    Name the output image:DownsampledER
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DownsampledER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:6|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
    Select the input image:OrigRNA
    Name the output image:DownsampledRNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:DownsampledRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:8|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
    Select the input image:OrigAGP
    Name the output image:DownsampledAGP
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DownsampledAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:10|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
    Select the input image:OrigMito
    Name the output image:DownsampledMito
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:DownsampledMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumDNA
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:IllumER
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumER
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:IllumRNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumRNA
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:IllumAGP
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumAGP
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:IllumMito
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumMito
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:17|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
