CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:r(?P<WellRow>[0-9]{2})c(?P<WellCol>[0-9]{2})f(?P<Site>[0-9]{2}).*ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<Plate>\\\\w*)__\\\\d{4}-\\\\d{2}-\\\\d{2}.*[\\\\\\\\/]
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigER': u'Plate', u'OrigAGP': u'Plate', u'OrigRNA': u'Plate', u'OrigDNA': u'Plate', u'OrigMito': u'Plate'}, {u'OrigER': u'Well', u'OrigAGP': u'Well', u'OrigRNA': u'Well', u'OrigDNA': u'Well', u'OrigMito': u'Well'}, {u'OrigER': u'Site', u'OrigAGP': u'Site', u'OrigRNA': u'Site', u'OrigDNA': u'Site', u'OrigMito': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

Resize:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:DownsampledDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DownsampledDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:7|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
    Select the input image:IllumDNA
    Name the output image:UpsampledIllumDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:10
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:8|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
    Select the input image:OrigER
    Name the output image:DownsampledER
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DownsampledER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:10|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
    Select the input image:IllumER
    Name the output image:UpsampledIllumER
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:10
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:11|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
    Select the input image:OrigRNA
    Name the output image:DownsampledRNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:DownsampledRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:13|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
    Select the input image:IllumRNA
    Name the output image:UpsampledIllumRNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:10
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:14|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
    Select the input image:OrigAGP
    Name the output image:DownsampledAGP
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:15|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
    Select the input image:DownsampledAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:16|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
    Select the input image:IllumAGP
    Name the output image:UpsampledIllumAGP
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:10
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:17|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
    Select the input image:OrigMito
    Name the output image:DownsampledMito
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.1
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:18|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
    Select the input image:DownsampledMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:19|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
    Select the input image:IllumMito
    Name the output image:UpsampledIllumMito
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:10
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    Interpolation method:Bilinear
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    Additional image count:0

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumDNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumDNA
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumER
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumER
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumRNA
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumRNA
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumAGP
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumAGP
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumMito
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Plate>_IllumMito
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    Saved file format:mat
    Output file location:Default Output Folder|IllumCorrFxns
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:25|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
    Local root path:\\\\\\\\argon\\\\imaging_analysis
    Cluster root path:/imaging/analysis
    Local root path:\\\\\\\\argon\\\\cmap_imaging
    Cluster root path:/cmap/imaging
