CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:21
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|work/projects/2015_Bray_GigaScience/workspace/load_data_csv/CDRP_test_set1/Plate_subsampled
    Name of the file:load_data_with_illum_url.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:logDNA
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:48.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_1515_Shape
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:5|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:logDNA
    Name the output image:ShapeOutlines1
    Outline display mode:Color
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    Width of outlines:4
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_1515_Shape

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_1515_Intensity
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:logDNA
    Name the output image:IntensityOutlines1
    Outline display mode:Color
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    Width of outlines:4
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_1515_Intensity

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_1010_Shape
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ShapeOutlines1
    Name the output image:ShapeOutlines2
    Outline display mode:Color
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    Width of outlines:3
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_1010_Shape

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_1010_Intensity
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:IntensityOutlines1
    Name the output image:IntensityOutlines2
    Outline display mode:Color
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    Width of outlines:3
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_1010_Intensity

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_2010_Shape
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ShapeOutlines2
    Name the output image:ShapeOutlines3
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_2010_Shape

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_2010_Intensity
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:IntensityOutlines2
    Name the output image:IntensityOutlines3
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:Blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_2010_Intensity

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_1020_Shape
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ShapeOutlines3
    Name the output image:ShapeOutlinesFinal
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:White
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_1020_Shape

IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei_1020_Intensity
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:IntensityOutlines3
    Name the output image:IntensityOutlinesFinal
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:White
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei_1020_Intensity

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:ShapeOutlinesFinal
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--nuclei_outlines_shape
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:IntensityOutlinesFinal
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--nuclei_outlines_intensity
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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