CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<dateCreated>[0-9]{8})_(?P<matrix>[A-Z]{2})_(?P<condition>[a-z]{4})_(?P<timePoint>[0-9]{4})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:neutrophils
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:condition
    Metadata category:matrix
    Metadata category:dateCreated

Crop:[module_num:5|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
    Select the input image:neutrophils
    Name the output image:neutrophilesCropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:50,1300
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:All
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:neutrophilesCropped
    Name the output image:illumination
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:10
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:neutrophilesCropped
    Name the output image:neutrosIlluCorrected
    Select the illumination function:illumination
    Select how the illumination function is applied:Divide

EnhanceEdges:[module_num:8|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
    Select the input image:neutrosIlluCorrected
    Name the output image:neutrosEdgeImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:neutrosInverted
    Image or measurement?:Image
    Select the first image:neutrosIlluCorrected
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:10|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:neutrosEdgeImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:neutrosInverted
    Multiply the second image by:1.0
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
ApplyThreshold:[module_num:11|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
    Select the input image:ImageAfterMath
    Name the output image:BW
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:MCT
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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
Morph:[module_num:12|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
    Select the input image:BW
    Name the output image:BWClosed
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:5
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:BWClosed
    Name the primary objects to be identified:detectedNeutros
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
Morph:[module_num:14|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
    Select the input image:BW
    Name the output image:BWClosed
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
TrackObjects:[module_num:15|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
    Choose a tracking method:LAP
    Select the objects to track:detectedNeutros
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells_
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):2.0,10.0
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:40
    Split alternative cost:40
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:5
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:No
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    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40

MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:detectedNeutros
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|tmp
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Tracked
    Overwrite existing files without warning?:No
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